# Generated by Configurator on Mon Aug 22 17:44:53 IDT 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM1,SerialManager,COM1
Device,Olympus IX83,OlympusIX83,Olympus IX83
Device,Objective,OlympusIX83,Objective
Device,Light Path,OlympusIX83,Light Path
Device,Condenser turret,OlympusIX83,Condenser turret
Device,Polarizer,OlympusIX83,Polarizer
Device,Dichroic 1,OlympusIX83,Dichroic 1
Device,EpiShutter 1,OlympusIX83,EpiShutter 1
Device,DiaShutter,OlympusIX83,DiaShutter
Device,TransmittedIllumination 1,OlympusIX83,TransmittedIllumination 1
Device,TransmittedIllumination 2,OlympusIX83,TransmittedIllumination 2
Device,Transmitted Aperture,OlympusIX83,Transmitted Aperture
Device,FocusDrive,OlympusIX83,FocusDrive
Device,XYStage,Prior,XYStage
Device,Camera-1,PVCAM,Camera-1
Device,XLED1 Controller,XCiteLed,XLED1 Controller
Device,LED1 Device,XCiteLed,LED1 Device
Device,LED4 Device,XCiteLed,LED4 Device

# Pre-init settings for devices
Property,XYStage,Port,COM1
Property,XLED1 Controller,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,19200
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1

# Hub (parent) references
Parent,Objective,Olympus IX83
Parent,Light Path,Olympus IX83
Parent,Condenser turret,Olympus IX83
Parent,Polarizer,Olympus IX83
Parent,Dichroic 1,Olympus IX83
Parent,EpiShutter 1,Olympus IX83
Parent,DiaShutter,Olympus IX83
Parent,TransmittedIllumination 1,Olympus IX83
Parent,TransmittedIllumination 2,Olympus IX83
Parent,Transmitted Aperture,Olympus IX83
Parent,FocusDrive,Olympus IX83

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Camera-1
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,6-NONE
Label,Objective,4,5-UPLSAPO60XO
Label,Objective,3,4-UPLSAPO40X2
Label,Objective,2,3-UPLSAPO20X
Label,Objective,1,2-UPLSAPO10X2
Label,Objective,0,1-UPLSAPO4X
# Light Path
Label,Light Path,2,3-Eyepiece
Label,Light Path,1,2-50-50
Label,Light Path,0,1-LeftPort
# Condenser turret
Label,Condenser turret,6,7-IX2-DIC40
Label,Condenser turret,5,6-IX2-DIC60
Label,Condenser turret,4,5-NONE
Label,Condenser turret,3,4-NONE
Label,Condenser turret,2,3-NONE
Label,Condenser turret,1,2-NONE
Label,Condenser turret,0,1-NONE
# Polarizer
Label,Polarizer,1,2-In
Label,Polarizer,0,1-Out
# Dichroic 1
Label,Dichroic 1,7,8-IX3-FDICT
Label,Dichroic 1,6,7-NONE
Label,Dichroic 1,5,6-NONE
Label,Dichroic 1,4,5-NONE
Label,Dichroic 1,3,4-NONE
Label,Dichroic 1,2,3-GFP/mCherry
Label,Dichroic 1,1,2-mCherry
Label,Dichroic 1,0,1-GFP

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

